proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[78]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), dend(1)
  for i = 9, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), dend[9](1)
  connect dend[16](0), dend[8](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), soma(0.5)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  for i = 32, 33 connect dend[i](0), dend[31](1)
  for i = 34, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[33](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), soma(0.5)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), soma(0.5)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  for i = 50, 51 connect dend[i](0), soma(0.5)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  for i = 54, 57 connect dend[i](0), soma(0.5)
  for i = 58, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  for i = 62, 63 connect dend[i](0), dend[61](1)
  connect dend[64](0), soma(0.5)
  for i = 65, 66 connect dend[i](0), dend[64](1)
  for i = 67, 68 connect dend[i](0), dend[66](1)
  for i = 69, 70 connect dend[i](0), dend[68](1)
  connect dend[71](0), soma(0.5)
  for i = 72, 73 connect dend[i](0), dend[i-1](1)
  connect dend[74](0), dend[72](1)
  connect dend[75](0), dend[71](1)
  for i = 76, 77 connect dend[i](0), dend[75](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-22.0447, 7.67855, 31.24, 1.5385)
	pt3dadd(-21.3374, 7.42752, 31.24, 2.59189)
	pt3dadd(-20.6301, 7.17649, 31.24, 4.1932)
	pt3dadd(-19.9228, 6.92546, 31.24, 6.23166)
	pt3dadd(-19.2155, 6.67443, 31.24, 8.27415)
	pt3dadd(-18.5082, 6.4234, 31.24, 10.3511)
	pt3dadd(-17.8009, 6.17237, 31.24, 11.7861)
	pt3dadd(-17.0936, 5.92135, 31.24, 12.5821)
	pt3dadd(-16.3863, 5.67032, 31.24, 12.3191)
	pt3dadd(-15.679, 5.41929, 31.24, 11.3666)
	pt3dadd(-14.9717, 5.16826, 31.24, 11.2003)
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  }
}
proc shape3d_2() {
  dend[4] {	pt3dadd(48.79, 43.71, 11.84, 0.25)
	pt3dadd(48.79, 43.71, 11.4, 0.25)
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  }
}
proc shape3d_3() {
  dend[11] {	pt3dadd(57.81, -16.57, 15.84, 0.41)
	pt3dadd(58.63, -17.64, 15.84, 0.41)
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  }
}
proc shape3d_4() {
  dend[15] {	pt3dadd(59.27, -2.48, 50.08, 0.33)
	pt3dadd(60.1, -2.48, 50.08, 0.33)
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  }
}
proc shape3d_5() {
  dend[20] {	pt3dadd(-6.39, 5.44, 18.4, 0.5)
	pt3dadd(-6.39, 5.52, 18.44, 0.5)
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  }
}
proc shape3d_6() {
  dend[24] {	pt3dadd(-23.72, -37.28, 14.08, 0.17)
	pt3dadd(-24.95, -38.03, 14.08, 0.17)
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  }
}
proc shape3d_7() {
  dend[26] {	pt3dadd(-52.68, -51.49, 20.52, 0.25)
	pt3dadd(-53.18, -51.4, 20.52, 0.25)
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  }
}
proc shape3d_8() {
  dend[30] {	pt3dadd(-62.97, -12.21, 1.96, 0.17)
	pt3dadd(-64.17, -12.28, 3.04, 0.17)
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  }
}
proc shape3d_9() {
  dend[35] {	pt3dadd(-69.72, -63.83, 23.76, 0.17)
	pt3dadd(-69.97, -63.83, 23.76, 0.17)
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  }
}
proc shape3d_10() {
  dend[37] {	pt3dadd(-99.79, -64.24, -3.64, 0.41)
	pt3dadd(-101.19, -64.99, -3.64, 0.41)
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  }
}
proc shape3d_11() {
  dend[40] {	pt3dadd(-178.67, -92.8, 17.84, 0.25)
	pt3dadd(-179.57, -93.05, 17.84, 0.25)
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  }
}
proc shape3d_12() {
  dend[42] {	pt3dadd(-23.17, 41.45, 0.52, 0.17)
	pt3dadd(-23.17, 41.62, 0.52, 0.17)
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  }
}
proc shape3d_13() {
  dend[44] {	pt3dadd(-74.29, 273.68, 24.28, 0.08)
	pt3dadd(-74.45, 273.84, 24.28, 0.08)
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  }
}
proc shape3d_14() {
  dend[44] {	pt3dadd(-130.79, 527.75, 26.6, 0.08)
	pt3dadd(-130.88, 527.83, 26.6, 0.08)
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  }
}
proc shape3d_15() {
  dend[44] {	pt3dadd(-183.66, 814.51, 15.12, 0.08)
	pt3dadd(-182.92, 816.58, 15.12, 0.08)
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  }
}
proc shape3d_16() {
  dend[54] {	pt3dadd(-11.46, 19.87, -12.2, 0.17)
	pt3dadd(-10.06, 21.2, -12.2, 0.17)
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  }
}
proc shape3d_17() {
  dend[59] {	pt3dadd(-23.7, 86.93, -7, 0.17)
	pt3dadd(-23.7, 87.1, -7, 0.17)
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  }
}
proc shape3d_18() {
  dend[67] {	pt3dadd(14.81, 39.01, -2.08, 0.25)
	pt3dadd(16.13, 39.84, -2.08, 0.25)
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  }
}
proc shape3d_19() {
  dend[74] {	pt3dadd(-47.04, 5.63, 6.92, 0.33)
	pt3dadd(-47.29, 5.47, 6.92, 0.33)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
}

objref all, somatic, basal
proc subsets() { local i
  objref all, somatic, basal
  all = new SectionList()
    soma all.append()
    for i=0, 77 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 77 dend[i] basal.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
   forsec all { nseg = int((L/50 + .999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    insert pas
    g_pas = 0.0003
    e_pas = -65
    Ra = 100
  }
}
access soma

celldef()
